PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['webgazer-2.0.1.tp.js']
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 960]
  color = $[-1,-1,-1]
  expName = demo_eye_tracking
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Routines
  Routine webcam_trial
    TextComponent intro_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        demo_eye_tracking: starting webcam

        This experiment demonstrates eye tracking via the webgazer library.

        You should see your web-browser request access to your webcam. You might need to click on this text to make that happen. Please permit access, and wait a little while. Your webcam video should appear in the top-left of the screen.
    CodeComponent start_webgazer
      Code Type = JS
      Begin JS Routine:
        // Show webcam thumbnail and face feedback box, but not face overlay and gaze dot
        window.webgazer.params.showVideoPreview = true;
        window.webgazer.params.showFaceFeedbackBox = true;
        window.webgazer.params.showFaceOverlay = false;
        window.webgazer.params.showGazeDot = false
        // Start eye tracking
        window.webgazer
            // Called on each eye tracking update
            .setGazeListener(function(data, clock) {
              if (data !== null) {
                // Remove first element from gazes array, add current gaze at the end
                window.xGazes.shift();
                window.xGazes.push(data.x);
                window.yGazes.shift();
                window.yGazes.push(data.y);
               }
            })
            .begin();
            //.showPredictionPoints(true);
      Each JS Frame:
        // Finish routine once everything is ready
        continueRoutine =
          !window.webgazer.isReady() ||
          document.getElementById('webgazerFaceFeedbackBox') === null ||
          document.getElementById('webgazerVideoFeed') === null;
  Routine inst1
    CodeComponent hide_thumbnail
      Code Type = JS
      Begin JS Routine:
        document.getElementById('webgazerFaceFeedbackBox').style.display = 'none';
        document.getElementById('webgazerVideoFeed').style.display = 'none';
    TextComponent instruction1Txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Webgazer initialized.
        Press space to move on
    KeyboardComponent inst1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine calibrationIntro
    TextComponent calibrationTxt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        OK great! we are almost ready to get started.

        First we need to calibrate the eye tracker. Please try to keep your head still. If you move your head too far away, you'r webcam will appear in the top left corner. If this happens, please move back into view.

        White squares will appear at different locations on the screen. Please click each square with your mouse.

        Click anywhere with the mouse to continue...
    MouseComponent calibrationMouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine calibration
    CodeComponent calibrationCode
      Code Type = JS
      Begin JS Routine:
        // Position calibration_square using width and height of window
        var canvas = psychoJS.window.size;
        var scaling = [
          canvas[0] <= canvas[1]? 1: canvas[0] / canvas[1],
          canvas[1] <= canvas[0]? 1: canvas[1] / canvas[0]
        ];
        var newPos = [
            calibration_x * scaling[0],
            calibration_y * scaling[1]
        ];
        console.log(newPos);
        //calibration_square.setPos(newPos);
        callib_color = 'white';
      Each JS Frame:
        // returns type error - checking fix

        // Hide webcam thumbnail if eyes are in validation box
        if (webgazer.checkEyesInValidationBox() === true) {
          // If last time that eyes were outside of validation box was longer than
          // window.eyesReturnedDelay ago, hide thumbnail
          if (
            document.getElementById('webgazerFaceFeedbackBox').style.display != 'none' &&
            (new Date).getTime() > window.eyesExitedTimestamp + window.eyesReturnedDelay
          ) {
            document.getElementById('webgazerFaceFeedbackBox').style.display = 'none';
            document.getElementById('webgazerVideoFeed').style.display = 'none';
          }
        } else {
            // Eyes outside of validation box; show thumbnail
            window.eyesExitedTimestamp = (new Date).getTime();
            document.getElementById('webgazerFaceFeedbackBox').style.display = 'block';
            document.getElementById('webgazerVideoFeed').style.display = 'block';
        }


        if (
          document.getElementById('webgazerFaceFeedbackBox').style.display != 'none' &&
          (new Date).getTime() > window.eyesExitedTimestamp + window.eyesReturnedDelay
        ) {
          document.getElementById('webgazerFaceFeedbackBox').style.display = 'none';
          document.getElementById('webgazerVideoFeed').style.display = 'none';
        }
    PolygonComponent calibration_square
      fillColor [set every frame] = $callib_color
      pos [set every repeat] = (calibration_x, calibration_y)
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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    MouseComponent calibrationClick
      clickable = calibration_square
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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    CodeComponent code
      Code Type = Auto->JS
      disabled = True
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      Each Frame:
        if calibrationClick.getPressed()[0]:
            callib_color = 'green'
  Routine initializeEyetracking
    CodeComponent initWebgazer
      Code Type = JS
      Begin JS Experiment:
        //initialize params of the webgazer package (used for eye tracking)

        // Initialize x and y arrays; we use these to calculate running averages of
        // current gaze position; the longer the window, the slower, but more fluent
        // the updates
        let averagingWindow = 10;
        window.xGazes = new Array(averagingWindow ).fill(0);
        window.yGazes = new Array(averagingWindow ).fill(0);
      Begin JS Routine:
        // Show webcam thumbnail and face feedback box, but not face overlay and gaze dot
        window.webgazer.params.showVideoPreview = true;
        window.webgazer.params.showFaceFeedbackBox = true;
        window.webgazer.params.showFaceOverlay = false;
        window.webgazer.params.showGazeDot = false
        // Start eye tracking
        window.webgazer
            // Called on each eye tracking update
            .setGazeListener(function(data, clock) {
              if (data !== null) {
                // Remove first element from gazes array, add current gaze at the end
                window.xGazes.shift();
                window.xGazes.push(data.x);
                window.yGazes.shift();
                window.yGazes.push(data.y);
               }
            })
            .begin();
            //.showPredictionPoints(true);
      Each JS Frame:
        // Finish routine once everything is ready
        continueRoutine =
          !window.webgazer.isReady() ||
          document.getElementById('webgazerFaceFeedbackBox') === null ||
          document.getElementById('webgazerVideoFeed') === null;
    TextComponent webcamWarning
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This experiment uses eye tracking.

        You should see your web-browser request access to your webcam. You might need to click on this text to make that happen. Please permit access, and wait a little while. Your webcam video should appear in the top-left of the screen.
  Routine trackingTrial
    PolygonComponent tracking_square
      fillColor = white
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    TextComponent trackingTxt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Great! we are now tracking your eye movements! look around the screen to see how it works!

        Please remember is important for you to keep your head still during the experiment.

        Press space to start
    KeyboardComponent tracking_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent tracking_code
      Code Type = JS
      Begin JS Routine:
        // Remove the click tracker used for calibration
        window.webgazer.removeMouseEventListeners();

        //hide the video thumbnail
        document.getElementById('webgazerFaceFeedbackBox').style.display = 'none';
        document.getElementById('webgazerVideoFeed').style.display = 'none';
      Each JS Frame:
        // Hide webcam thumbnail if eyes are in validation box
        if (webgazer.checkEyesInValidationBox() === true) {
          // If last time that eyes were outside of validation box was longer than
          // window.eyesReturnedDelay ago, hide thumbnail
          if (
            document.getElementById('webgazerFaceFeedbackBox').style.display != 'none' &&
            (new Date).getTime() > window.eyesExitedTimestamp + window.eyesReturnedDelay
          ) {
            document.getElementById('webgazerFaceFeedbackBox').style.display = 'none';
            document.getElementById('webgazerVideoFeed').style.display = 'none';
          }
        } else {
            // Eyes outside of validation box; show thumbnail
            window.eyesExitedTimestamp = (new Date).getTime();
            document.getElementById('webgazerFaceFeedbackBox').style.display = 'block';
            document.getElementById('webgazerVideoFeed').style.display = 'block';
        }
        // Update tracking square to the average of last n gazes
        let x = util.sum(window.xGazes) / window.xGazes.length;
        let y = util.sum(window.yGazes) / window.yGazes.length;
        // Set tracking square to x and y, transformed to height units
        tracking_square.setPos(
          util.to_height(
            [
              x - psychoJS.window.size[0] / 2,
              -1 * (y - psychoJS.window.size[1] / 2)
            ],
            'pix',
            psychoJS.window
          )
        );
Flow
  Routine initializeEyetracking
  Routine inst1
  Routine calibrationIntro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = calibration_trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'calibration_x': -0.44, 'calibration_y': -0.44},
      {'calibration_x': -0.44, 'calibration_y': -0.22},
      {'calibration_x': -0.44, 'calibration_y': 0},
      {'calibration_x': -0.44, 'calibration_y': 0.22},
      {'calibration_x': -0.44, 'calibration_y': 0.44},
      {'calibration_x': -0.22, 'calibration_y': -0.44},
      {'calibration_x': -0.22, 'calibration_y': -0.22},
      {'calibration_x': -0.22, 'calibration_y': 0},
      {'calibration_x': -0.22, 'calibration_y': 0.22},
      {'calibration_x': -0.22, 'calibration_y': 0.44},
      {'calibration_x': 0, 'calibration_y': -0.44},
      {'calibration_x': 0, 'calibration_y': -0.22},
      {'calibration_x': 0, 'calibration_y': 0},
      {'calibration_x': 0, 'calibration_y': 0.22},
      {'calibration_x': 0, 'calibration_y': 0.44},
      {'calibration_x': 0.22, 'calibration_y': -0.44},
      {'calibration_x': 0.22, 'calibration_y': -0.22},
      {'calibration_x': 0.22, 'calibration_y': 0},
      {'calibration_x': 0.22, 'calibration_y': 0.22},
      {'calibration_x': 0.22, 'calibration_y': 0.44},
      {'calibration_x': 0.44, 'calibration_y': -0.44},
      {'calibration_x': 0.44, 'calibration_y': -0.22},
      {'calibration_x': 0.44, 'calibration_y': 0},
      {'calibration_x': 0.44, 'calibration_y': 0.22},
      {'calibration_x': 0.44, 'calibration_y': 0.44},
      {'calibration_x': -0.66, 'calibration_y': -0.44},
      {'calibration_x': -0.66, 'calibration_y': -0.22},
      {'calibration_x': -0.66, 'calibration_y': 0},
      {'calibration_x': -0.66, 'calibration_y': 0.22},
      {'calibration_x': 0.66, 'calibration_y': -0.44},
      {'calibration_x': 0.66, 'calibration_y': -0.22},
      {'calibration_x': 0.66, 'calibration_y': 0}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
    Routine calibration
  LoopTerminator trials
  Routine trackingTrial
